version: "1.0"

experiment_profile_name: stirring and temperature with aliases

metadata:
  author: Cameron Davidson-Pilon
  description: An experiment profile for hot and cold temps in two pioreactors. Stop after 10 hours. 


common:
  jobs:
    stirring:
      actions:
        - type: start
          t: 0s
        - type: stop
          t: 10h
    temperature_automation:
      actions:
        - type: stop
          t: 10h

pioreactors:
  worker1:
    label: hot
    jobs:
      temperature_automation:
        actions:
          - type: start
            t: 0s
            options:
              automation_name: thermostat
              target_temperature: 38
  worker2:
    label: cold
    jobs:
      temperature_automation:
        actions:
          - type: start
            t: 0s
            options:
              automation_name: thermostat
              target_temperature: 28
