experiment_profile_name: demo_stirring_repeat

metadata:
  author: Cam Davidson-Pilon
  description: A simple climbing RPM example

common:
  jobs:
    stirring:
      actions:
        - type: start
          hours_elapsed: 0.0
          options:
            target_rpm: 400.0
        - type: repeat
          hours_elapsed: 1
          while: ::stirring:target_rpm <= 1000
          repeat_every_hours: 0.5
          actions:
            - type: update
              hours_elapsed: 0.0
              options:
                target_rpm: ${{::stirring:target_rpm + 100}}
            - type: update
              hours_elapsed: 0.25
              options:
                target_rpm: ${{::stirring:target_rpm - 50}}